PsychoPy2experiment version="1.85.3"
Settings
  Monitor = testMonitor
  Experiment info = {'participant':'', 'session':'001'}
  Units = use prefs
  Window size (pixels) = (1024, 768)
  Full-screen window = True
  expName = SemanticRichnessBLockBasedv1
  Screen = 1
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Routines
  Routine WordStimulus
    TextComponent WordStim
      text = $Concept
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.2
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  Routine CountDown
    TextComponent Three
      text = 3
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.2
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    TextComponent Two
      text = 2
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 1
      letterHeight = 0.2
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    TextComponent One
      text = 1
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 2
      letterHeight = 0.2
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  Routine Intro
    TextComponent Instructions
      text = Instructions
      startVal [time (s)] = 0.0
      letterHeight = 0.2
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    KeyboardComponent StartExperimentResponse
      forceEndRoutine = True
      allowedKeys = '5'
      startVal [time (s)] = 0.0
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  Routine WhiteCrosshair
    TextComponent WhiteCrossHairStim
      text = +
      stopVal [duration (s)] = 5
      startVal [time (s)] = 0.0
      letterHeight = 0.2
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  Routine RedCrosshair
    TextComponent RedCrossHairStim
      color = red
      text = +
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.2
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Flow
  Routine Intro
  Routine WhiteCrosshair
  Routine CountDown
  Routine WordStimulus
  Routine RedCrosshair
